PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = flankerRitvik
  keyboardBackend = ioHub
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent Stimulus
      color [set every repeat] = white
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $stimulus
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if (corrAns == 'left' and key_resp.keys == 'left') or (corrAns == 'right' and key_resp.keys == 'right'):
            outlet.push_sample(mkr_corr)
            print(mkr_corr)
        else:
            outlet.push_sample(mkr_wro)
            print(mkr_wro)
  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Using your dominant hand, press the arrow key pointing towards the same direction as the middle arrow.

        Press [->] if middle arrow points towards right
        Press [<-] if middle arrow points towards left

        The practice trials will begin now

        Press any key to start.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixationCross
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cross
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamOutlet, StreamInfo

        info = StreamInfo(name='Flanker', type='Markers', channel_count = 1, channel_format = 'string', source_id='LSL')
        outlet = StreamOutlet(info)

        mkr1 = ['Block Begins']
        mkr_corr = ['Correct']
        mkr_wro = ['Wrong']
        mkr3 = ['Block Ends']
  Routine Thanks
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for playing our game!!!
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(mkr3)
        print(mkr3)
  Routine Blank_Screen
  Routine bs_2
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine is_gap
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Rest
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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      text:
        Take some rest...

        Next block will start in 1 minute
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(mkr3)
        print(mkr3)
      End Routine:
        outlet.push_sample(mkr1)
        print(mkr1)
  Routine test_run
    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $stimulus
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  Routine Game_Start
  Routine game_start
  Routine task_start
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The task will begin now.

        Press any key to start
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(mkr1)
        print(mkr1)
Flow
  Routine Instructions
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = flankerParameters.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'stimulus': '> > > > >', 'cross': '+', 'congruent': 1, 'corrAns': 'right'},
      {'stimulus': '< < < < <', 'cross': '+', 'congruent': 1, 'corrAns': 'left'},
      {'stimulus': '> > < > >', 'cross': '+', 'congruent': 0, 'corrAns': 'left'},
      {'stimulus': '< < > < <', 'cross': '+', 'congruent': 0, 'corrAns': 'right'},
      {'stimulus': '> > > > >', 'cross': '+', 'congruent': 1, 'corrAns': 'right'},
      {'stimulus': '> > > > >', 'cross': '+', 'congruent': 1, 'corrAns': 'right'},
      {'stimulus': '> > > > >', 'cross': '+', 'congruent': 1, 'corrAns': 'right'},
      {'stimulus': '< < < < <', 'cross': '+', 'congruent': 1, 'corrAns': 'left'},
      {'stimulus': '< < < < <', 'cross': '+', 'congruent': 1, 'corrAns': 'left'},
      {'stimulus': '< < < < <', 'cross': '+', 'congruent': 1, 'corrAns': 'left'}]
    Routine FixationCross
    Routine bs_2
    Routine trial
    Routine is_gap
  LoopTerminator practice_trials
  Routine task_start
  LoopInitiator Sequence_Trial loopType="TrialHandler"
    conditionsFile = flankerParameters.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'stimulus': '> > > > >', 'cross': '+', 'congruent': 1, 'corrAns': 'right'},
      {'stimulus': '< < < < <', 'cross': '+', 'congruent': 1, 'corrAns': 'left'},
      {'stimulus': '> > < > >', 'cross': '+', 'congruent': 0, 'corrAns': 'left'},
      {'stimulus': '< < > < <', 'cross': '+', 'congruent': 0, 'corrAns': 'right'},
      {'stimulus': '> > > > >', 'cross': '+', 'congruent': 1, 'corrAns': 'right'},
      {'stimulus': '> > > > >', 'cross': '+', 'congruent': 1, 'corrAns': 'right'},
      {'stimulus': '> > > > >', 'cross': '+', 'congruent': 1, 'corrAns': 'right'},
      {'stimulus': '< < < < <', 'cross': '+', 'congruent': 1, 'corrAns': 'left'},
      {'stimulus': '< < < < <', 'cross': '+', 'congruent': 1, 'corrAns': 'left'},
      {'stimulus': '< < < < <', 'cross': '+', 'congruent': 1, 'corrAns': 'left'}]
    Routine FixationCross
    Routine bs_2
    Routine trial
    Routine is_gap
  LoopTerminator Sequence_Trial
  Routine Rest
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = flankerParameters.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
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    Routine FixationCross
    Routine bs_2
    Routine trial
    Routine is_gap
  LoopTerminator trials
  Routine Thanks
