PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = StroopRitvik
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember to press the button according to the colour of the word and not the word itself:
        left=red
        down=green
        right=blue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroopParameters.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'word': 'red', 'colour': 'red', 'congruent': 1, 'corrAns': 'left'},
      {'word': 'red', 'colour': 'green', 'congruent': 0, 'corrAns': 'down'},
      {'word': 'green', 'colour': 'green', 'congruent': 1, 'corrAns': 'down'},
      {'word': 'green', 'colour': 'blue', 'congruent': 0, 'corrAns': 'right'},
      {'word': 'blue', 'colour': 'blue', 'congruent': 1, 'corrAns': 'right'},
      {'word': 'blue', 'colour': 'red', 'congruent': 0, 'corrAns': 'left'}]
    Routine trial
  LoopTerminator trials
